CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:img
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    Set intensity range from:Image bit-depth
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:img
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:Red: 1
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    Image name:Channel1
    Channel number:Green: 2
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    Image name:Channel2

Threshold:[module_num:6|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
    Select the input image:Channel1
    Name the output image:Threshold_red
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskImage:[module_num:7|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
    Select the input image:Channel1
    Name the output image:MaskRed
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_red
    Invert the mask?:No

MaskImage:[module_num:8|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
    Select the input image:Channel2
    Name the output image:MaskGreen
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_red
    Invert the mask?:No

MeasureImageIntensity:[module_num:9|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
    Select the image to measure:MaskRed
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:MaskGreen
    Measure the intensity only from areas enclosed by objects?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:MaskGreen
    Select method for constructing file names:From image filename
    Select image name for file prefix:img
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_maskgreen
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:MaskRed
    Select method for constructing file names:From image filename
    Select image name for file prefix:img
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_maskred
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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enabled:False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
    Select the type of image to save:Mask
    Select the image to save:Threshold_red
    Select method for constructing file names:From image filename
    Select image name for file prefix:img
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:binary_mask_from_red
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Intensity_StdIntensity_MaskGreen,Image|Intensity_StdIntensity_MaskRed,Image|Intensity_TotalIntensity_MaskGreen,Image|Intensity_TotalIntensity_MaskRed,Image|Intensity_MeanIntensity_MaskGreen,Image|Intensity_MeanIntensity_MaskRed,Image|Intensity_MedianIntensity_MaskGreen,Image|Intensity_MedianIntensity_MaskRed,Image|Intensity_TotalArea_MaskGreen,Image|Intensity_TotalArea_MaskRed,Image|Threshold_FinalThreshold_Threshold_red
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cell_border_masking
    Overwrite existing files without warning?:No
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